    'CR1000 Series Datalogger
'
'date: 04 April 2013
'program author: Sarah Waldo
' This program is designed for the auxiliary CR1000 datalogger to run the solenoid valves, in 
' order to prevent corruption of the LI6262 CO2 signal by electronic noise. This program simply 
' uses "PortSet" to turn the solenoids off and on. The interval can be easily switched if 
' needed, for example to integrate taking measurements off of a chamber. 
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


'''''''''' SETTINGS '''''''''''
ConstTable
  Const TOGGLE_TIME = 4*60    'duration between switching sampling sources, seconds
  Const USE_3_LEVELS = False  'set true for three-level sampling
  
  Const STATS_INTV = 30
  Const STATS_UNIT = Min

'' 0-495 ppb over 100-5000 mV 
'   slope of 0.05 ppb/mV with offset of -5 ppb @ 0mV
'    --> voltage divider
'   slope of 0.05 ppb/mV with offset of -2.5 ppb @ 0mV
  Const DF1_MULT = 0.05 
  Const DF1_OFF = -2.5
  
  Const DF2_MULT = 0.05
  Const DF2_OFF = -2.5  
EndConstTable


'''''''''' WIRING ''''''''''
Const VALVE_1_CTRL = 7   'C7
Const VALVE_2_CTRL = 8   'C8


'''''''''' CONSTANTS '''''''''''
Const INTEG = 250


'''''''''' VARIABLES '''''''''''

'measurements from DF1, DF2
Public raw(2) 
Alias raw(1) = ch1_value
Alias raw(2) = ch2_value

'level-partitioned readings of DF1, DF2
Public conc(6)
Alias conc(1) = ch1_top
Alias conc(2) = ch1_mid
Alias conc(3) = ch1_btm
Alias conc(4) = ch2_top
Alias conc(5) = ch2_mid
Alias conc(6) = ch2_btm

'data logger built-in sensors
Public PTemp, batt_volt

Public valve_on(2) As Boolean
Alias valve_on(1) = v1_is_on
Alias valve_on(2) = v2_is_on


Public status(4)
Alias status(1) = chan1_valve1_open
Alias status(2) = chan1_valve1_closed
Alias status(3) = chan2_valve1_open
Alias status(4) = chan2_valve1_closed


'''''''''' DATA TABLES '''''''''''
DataTable (Gradient_solenoid,1,-1)
	DataInterval (0,1,Sec,1)
  CardOut(1,-1)
	Sample(1,batt_volt,FP2)
	Sample(1,PTemp,FP2)

	Sample(1, v1_is_on, Boolean)
	'Sample(1, v2_is_on, Boolean) 

  Sample(1,ch1_value,IEEE4)
  Sample(1,ch2_value,IEEE4)
  'other measurements here
EndTable

DataTable(Gradient_stats,1,-1)
  DataInterval(0,STATS_INTV,STATS_UNIT,10)
  CardOut(1,-1)
  Average(1,chan1_valve1_open,FP2,chan1_valve1_open=NAN)
  Average(1,chan1_valve1_closed,FP2,chan1_valve1_closed=NAN)
  Average(1,chan2_valve1_open,FP2,chan2_valve1_open=NAN)
  Average(1,chan2_valve1_closed,FP2,chan2_valve1_closed=NAN)
EndTable


'''''''''' MAIN PROGRAM ''''''''''
BeginProg
	Scan (1,Sec,0,0)
  
    VoltDiff(ch1_value,1,mv5000,1,1,0,INTEG,DF1_MULT,DF1_OFF)
    VoltDiff(ch2_value,1,mv5000,2,1,0,INTEG,DF2_MULT,DF2_OFF)

		PanelTemp (PTemp,250)
		Battery (batt_volt)

    If ( TimeIntoInterval(0,TOGGLE_TIME,Sec)) Then 
      v1_is_on = NOT v1_is_on
      PortSet(VALVE_1_CTRL, v1_is_on)
    EndIf

    If (v1_is_on) Then
      chan1_valve1_open = chan1_conc
      chan1_valve1_closed = NAN
      chan2_valve1_open = chan2_conc
      chan2_valve1_closed = NAN
    Else
      chan1_valve1_open = NAN
      chan1_valve1_closed = chan1_conc 
      chan2_valve1_open = NAN
      chan2_valve1_closed = chan2_conc
    EndIf
       
		CallTable Gradient_solenoid
		CallTable Gradient_stats
	NextScan
EndProg


